<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:aeon-frg="clr-namespace:Aeon.Foraging;assembly=Aeon.Foraging"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>UndergroundFeeder</Name>
        <Description>Contains control and acquisition functionality for an underground feeder module.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="PatchEvents" Description="The name of the output sequence containing all patch events." />
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>PatchEvents</rx:Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SampleRate" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ConfigureMagneticEncoder">
                <p1:SampleRate>SampleRate500Hz</p1:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="DeliverPellet" Description="The name of the input sequence used to trigger pellet delivery." />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
              <rx:Name>DeliverPellet</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="PelletDelivered" Description="The name of the output sequence carrying pellet delivery notifications." />
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:Timestamped(sys:Boolean)">
              <rx:Name>PelletDelivered</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" Category="RetryDelivery" />
              <Property Name="Count" Category="RetryDelivery" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TimedRetryCount</Name>
              <Description>Passes each value from the source sequence, and repeats it a fixed number of times until a feedback signal is received within the specified time.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" />
                    <Property Name="Count" />
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name />
                    <Description />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" Description="The time interval within which the feedback is expected." />
                          <Property Name="Count" Description="The maximum number of times to resend a value when feedback is not received." />
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Command</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
it as Value,
False as Repetition)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Command</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="DueTime" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Delay">
                                  <rx:DueTime>PT0S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Count" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:RepeatCount">
                                  <rx:Count>0</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Feedback</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:TakeUntil" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
it as Value,
True as Repetition)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="11" Label="Source1" />
                              <Edge From="3" To="5" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                              <Edge From="5" To="7" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="9" Label="Source1" />
                              <Edge From="8" To="9" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source2" />
                              <Edge From="11" To="12" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Switch" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source2</Name>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>Feedback</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source3" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DeliverPellet</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateOutputSetPayload">
                      <p1:OutputSet>Out0</p1:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateOutputClearPayload">
                      <p1:OutputClear>Out0</p1:OutputClear>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="ResetFeeder" Description="The name of the input sequence used to reset the underground feeder." />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
              <rx:Name>ResetFeeder</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ResetFeeder</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateOutputSetPayload">
                      <p1:OutputSet>Out0</p1:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateOutputClearPayload">
                      <p1:OutputClear>Out0</p1:OutputClear>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsRepetition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Repetition</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>PairRepetitions</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PatchEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Write</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:TimestampedOutputClear" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p1:DigitalOutputs">
                            <Value>None</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
1 as Value,
Item2.Seconds as Seconds)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings />
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>203</harp:Address>
                      <harp:PayloadType>TimestampedU8</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PatchEvents</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedMagneticEncoder" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Radius" />
            </Expression>
            <Expression xsi:type="harp:ConvertTimestamped">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Angle</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Radius" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon-frg:WheelDisplacement">
                      <aeon-frg:Radius>4</aeon-frg:Radius>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="WheelDisplacement" Description="The name of the output sequence carrying total distance travelled on the wheel." />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>WheelDisplacement</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedAuxInState" />
            </Expression>
            <Expression xsi:type="harp:ConvertTimestamped">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:AuxiliaryInputs">
                      <Value>None</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>PelletDelivered</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PelletDelivered</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="20" Label="Source2" />
            <Edge From="0" To="22" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="16" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="31" Label="Source2" />
            <Edge From="8" To="10" Label="Source2" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="19" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="16" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source3" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="22" To="28" Label="Source1" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="27" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WheelDisplacement</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey P Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>DeliverPellet</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>