WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai
  TaskLogicPath=..\local\AindBehaviorDirectedForagingTaskLogic.json
  RigPath=..\local\AindBehaviorDirectedForagingRig.json
  SessionPath=..\local\Session.json

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindBehaviorDirectedForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SessionSchema

    SubscribeSubject RawRigSchema
    -> AindBehaviorDirectedForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.AindBehaviorDirectedForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindBehaviorDirectedForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.AindBehaviorDirectedForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=8)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SessionSchema
    -> PropertyMapping(SessionName(Selector=SessionName)) => #16
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=DataDirectory)
    -> PropertyMapping(RootFolder) => #19
    #16, #19 -> IncludeWorkflow
      Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai
      RootFolder=..\temp_data
      SessionName=test_2026-06-29T172245Z
      SubjectName=LoggingRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartLogging

    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvents
    -> Timestamp
    -> AllenNeuralDynamics.Core.Design.AccumulateToImmutableList
    -> BehaviorSubject SoftwareEventHistory

    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartExperiment

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

    BooleanProperty(Value=false)
    -> Take(Count=1) => #11
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #14
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #17
    #11, #14, #17 -> Merge
    -> BehaviorSubject ExperimentState

    Unit
    -> MulticastSubject StartLogging

GroupWorkflow Hardware
    GroupWorkflow HarpDevices
        BehaviorSubject<Bonsai.Harp.HarpMessage> DelphiControllerCommands => #0
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpDelphiController.PortName)
        -> PropertyMapping(PortName) => #3
        #0, #3 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM4)
        -> PublishSubject DelphiControllerEvents

        BehaviorSubject<Bonsai.Harp.HarpMessage> SniffDetectorCommands => #6
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector.PortName)
        -> PropertyMapping(PortName) => #9
        #6, #9 -> AllenNeuralDynamics.SniffDetector.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM32)
        -> PublishSubject SniffDetectorEvents

        ExternalizedMapping(Name(DisplayName=TriggerHarpReadDumpSubjectName))
        -> SubscribeSubject TriggerHarpReadDump
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> MulticastSubject DelphiControllerCommands

        Unit
        -> GroupWorkflow DisableCameraTriggers
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S)
            -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCamTriggerPayload(EnableCamTrigger=0))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow DisableFSM
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S)
            -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=0))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow EnableValveLeds
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.EnableValveLeds)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToByte(it)
            -> PropertyMapping(EnableValveLeds) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableValveLedsPayload(EnableValveLeds=1))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetMinimumPokeTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.MinimumPokeTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(MinimumPokeTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinimumPokeTimeUSPayload(MinimumPokeTimeUS=100000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetMinimumOdorDeliveryTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.MinimumOdorDeliveryTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(MinOdorDeliveryTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinOdorDeliveryTimeUSPayload(MinOdorDeliveryTimeUS=500000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetFinalValveEnergizedTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.FinalValveEnergizedTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(FinalValveEnergizedTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFinalValveEnergizedTimeUSPayload(FinalValveEnergizedTimeUS=110000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetVacuumSetupTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.VacuumSetupTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(VacuumSetupTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumSetupTimeUSPayload(VacuumSetupTimeUS=10000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetVacuumCloseTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.VacuumCloseTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(VacuumCloseTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumCloseTimeUSPayload(VacuumCloseTimeUS=20000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetOdorTransitionTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.OdorTransitionTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(OdorTransitionTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateOdorTransitionTimeUSPayload(OdorTransitionTimeUS=20000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> GroupWorkflow SetMaxOdorDeliveryTime
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpDelphiController.MaxOdorDeliveryTime)
            -> Multiply(Operand=DoubleProperty(Value=1000000))
            -> PropertyMapping(MaxOdorDeliveryTimeUS) => #5
            #1, #5 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMaxOdorDeliveryTimeUSPayload(MaxOdorDeliveryTimeUS=600000))
            -> MulticastSubject DelphiControllerCommands
            -> WorkflowOutput
        -> Delay(DueTime=PT1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateQueuedOdorMaskPayload(QueuedOdorMask=0))
        -> MulticastSubject DelphiControllerCommands
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=1))
        -> MulticastSubject DelphiControllerCommands

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpUndergroundFeeder.RetryDeliveryDueTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #35
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpUndergroundFeeder.PortName)
        -> PropertyMapping(PortName) => #38
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpUndergroundFeeder.RetryDeliveryCount)
        -> PropertyMapping(Count) => #41
        #35, #38, #41 -> IncludeWorkflow
          Path=Aeon.Foraging:UndergroundFeeder.bonsai
          PatchEvents=PatchEvents
          SampleRate=SampleRate500Hz
          DeliverPellet=DeliverPellet
          PelletDelivered=PelletDelivered
          DueTime=PT0S
          Count=0
          ResetFeeder=ResetFeeder
          PortName=COM8
          Radius=4
          WheelDisplacement=WheelDisplacement

        SubscribeSubject DelphiControllerEvents
        -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.QueuedOdorMask)
        -> Equal(Operand=WorkflowProperty<System.UInt16>(Value=0))
        -> BehaviorSubject DelphiControllerQueueReady

    GroupWorkflow Cameras
        SubscribeSubject RigSchema
        -> Take(Count=1)
        -> MemberSelector(Selector=TriggeredCameraController)
        -> AsyncSubject TriggeredCameraController
        -> MemberSelector(Selector=FrameRate.Value)
        -> AsyncSubject CameraFrameRate

        SubscribeSubject CameraFrameRate
        -> AllenNeuralDynamics.DelphiController.Format(MessageType=Write, Register=AllenNeuralDynamics.DelphiController.FrameRate)
        -> MulticastSubject DelphiControllerCommands
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateCamPinPayload(CamPin=26))
        -> MulticastSubject DelphiControllerCommands
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateDutyCyclePayload(DutyCycle=0.5))
        -> MulticastSubject DelphiControllerCommands

        SubscribeSubject DelphiControllerEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.TimestampedCamPinState)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject FrameEvent

        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> Merge
        -> CreateObservable InstantiateCamera => #21
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ThisCamera

            BooleanProperty(Value=true)
            -> MulticastSubject TriggeredCamerasInitialized
            -> Take(Count=1) => #5
            SubscribeSubject ThisCamera
            -> MemberSelector(Selector=Value)
            -> PropertyMapping => #8
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
              Gamma(Selector=Gamma)
              PixelFormat(Selector=PixelFormat)
              AdcBitDepth(Selector=AdcBitDepth)
            SubscribeSubject ThisCamera
            -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=RegionOfInterest)
            -> InputMapping(Value(Selector="X,Y,Width,Height"))
            -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
            -> PropertyMapping(RegionOfInterest) => #14
            #5, #8, #14 -> LimitedAindSpinnakerCapture => #15
              Index=nil
              SerialNumber=23113702
              ColorProcessing=Default
              ExposureTime=3000
              Gain=0
              Binning=1
              Gamma=nil
              PixelFormat=Mono8
              RegionOfInterest(X=0, Y=0, Width=0, Height=0)
              AdcBitDepth=Bit10
            SubscribeSubject FrameEvent => #16
            #15, #16 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #18
            SubscribeSubject ThisCamera
            -> MemberSelector(Selector=Key) => #20
            #18, #20 -> WithLatestFrom
            -> WorkflowOutput
        Timer(DueTime=PT0S, Period=PT0.1S) => #22
        #21, #22 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Merge
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

        BehaviorSubject<System.Boolean> TriggeredCamerasInitialized

        SubscribeSubject TriggeredCamerasInitialized
        -> IntProperty(Value=1) => #30
        IntProperty(Value=0)
        -> Take(Count=1) => #32
        #30, #32 -> Merge
        -> Accumulate => #34
        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> MemberSelector(Selector=Count)
        -> PropertyMapping(Value) => #38
        #34, #38 -> GreaterThanOrEqual(Operand=IntProperty(Value=1))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> Delay(DueTime=PT0.1S)
        -> BehaviorSubject TriggeredCamerasReady

    SubscribeSubject SniffDetectorEvents
    -> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage)
    -> BehaviorSubject TimeBase

GroupWorkflow Tracking
    SubscribeSubject TriggeredCamerasStream
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Key)
        -> Equal(Operand=StringProperty(Value=MainCamera))
        -> WorkflowOutput
    -> Merge
    -> MemberSelector(Selector=Value.Image)
    -> PublishSubject RawCameraFeed => #4
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=MaskRegion.MaskPolygons)
    -> PointListToRegion
    -> PropertyMapping(Regions) => #8
    #4, #8 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint
          Point(X=9, Y=134)
          Point(X=323, Y=76)
          Point(X=615, Y=70)
          Point(X=719, Y=120)
          Point(X=719, Y=539)
          Point(X=269, Y=539)
          Point(X=0, Y=539)
          Point(X=9, Y=277)
        ArrayOfPoint(Point(X=0, Y=0), Point(X=100, Y=0), Point(X=100, Y=100), Point(X=0, Y=100))
      MaskType=ToZero
      FillValue(Val0=150, Val1=150, Val2=150, Val3=150)
    -> Bonsai.Vision.Threshold(ThresholdValue=11, MaxValue=255, ThresholdType=BinaryInv)
    -> PublishSubject ThresholdFeed
    -> Bonsai.Vision.MorphologicalOperator(Size(Width=4, Height=4), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> PublishSubject Contour

GroupWorkflow Visualizer
    Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder
    -> PublishSubject Frame

    SubscribeSubject Frame
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #3
    -> Bonsai.ImGui.TableNextColumnBuilder RawFeed(Visible=true) => #4
    SubscribeSubject RawCameraFeed
    -> Bonsai.ImGui.Visualizers.SampleOnNewFrame Frame
    -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
    -> PropertyMapping(Image) => #8
    #4, #8 -> Bonsai.ImGui.ImageBuilder(Visible=true, ImageSize(X=320, Y=240), UV0(X=0, Y=0), UV1(X=1, Y=1))
    #3 -> Bonsai.ImGui.TableNextColumnBuilder ThresholdFeed(Visible=true) => #10
    SubscribeSubject ThresholdFeed
    -> Bonsai.ImGui.Visualizers.SampleOnNewFrame Frame
    -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
    -> PropertyMapping(Image) => #14
    #10, #14 -> Bonsai.ImGui.ImageBuilder(Visible=true, ImageSize(X=320, Y=240), UV0(X=0, Y=0), UV1(X=1, Y=1))

    SubscribeSubject Frame
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=4, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #17
    -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.ButtonBuilder(Visible=true, Text="Reset Feeder")
    -> BehaviorSubject UiResetFeeder
    #17 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.ButtonBuilder(Visible=true, Text="Start Triggers")
    -> BehaviorSubject UiStartTriggers
    #17 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.ButtonBuilder(Visible=true, Text="Start Experiment")
    -> BehaviorSubject UiStartExperiment
    #17 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
    -> Bonsai.ImGui.ButtonBuilder(Visible=true, Text="Stop Experiment")
    -> BehaviorSubject UiStopExperiment

    SubscribeSubject Frame => #30
    SubscribeSubject SoftwareEventHistory
    -> PropertyMapping(SoftwareEvents) => #32
    #30, #32 -> SoftwareEventVisualizer
      Visible=true
      SoftwareEvents=""
      TrialBreakEventName=EndTrialEvent
      ShadedAreaPlotters
        ShadedAreaPlotter(EventName=ExperimentStart, Color=LawnGreen, Alpha=0.3)
        ShadedAreaPlotter(EventName=TrialStart, Color=CornflowerBlue, Alpha=0.3)
        ShadedAreaPlotter(EventName=OdorQueued, Color=Violet, Alpha=0.3)
        ShadedAreaPlotter(EventName=OdorReleased, Color=BlueViolet, Alpha=0.3)
      PointPlotters
        PointPlotter(EventName=RadiusTrigger, Color=DarkGreen, YPosition=0.5, MarkerSize=3, Marker=Circle)
        PointPlotter(EventName=TimerTrigger, Color=DarkGreen, YPosition=0.5, MarkerSize=3, Marker=Square)
        PointPlotter(EventName=RandomTrigger, Color=DarkGreen, YPosition=0.5, MarkerSize=3, Marker=Diamond)

GroupWorkflow OperationControl
    SubscribeSubject UiStartExperiment
    -> Unit
    -> Take(Count=1)
    -> MulticastSubject StartExperiment
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ExperimentStart)
    -> MulticastSubject SoftwareEvents

    SubscribeSubject UiStopExperiment
    -> Unit
    -> Take(Count=1)
    -> MulticastSubject EndExperiment

    SubscribeSubject UiStartTriggers
    -> Unit
    -> Take(Count=1)
    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCamTriggerPayload(EnableCamTrigger=1))
    -> MulticastSubject DelphiControllerCommands

    SubscribeSubject UiResetFeeder
    -> Unit
    -> MulticastSubject ResetFeeder

Defer TaskLogic => #9
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Trials)
    -> Merge
    -> CreateObservable DoTrial
        WorkflowInput Source1
        -> Sink SoftwareEvent
            WorkflowInput Source1 => #0
            ExternalizedMapping(EventName) => #1
            #0, #1 -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialStart)
            -> MulticastSubject SoftwareEvents
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject TrialDefinition

        SubscribeSubject TrialDefinition => #4
        SubscribeSubject DelphiControllerQueueReady
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #6 -> Zip
        -> MemberSelector(Selector=Item1.OdorDefinition.OlfactometerMask)
        -> InputMapping(QueuedOdorMask(Selector=it))
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateQueuedOdorMaskPayload(QueuedOdorMask=2))
        -> MulticastSubject DelphiControllerCommands
        -> Take(Count=1)
        -> AsyncSubject OdorQueued
        -> Sink SoftwareEvent
            WorkflowInput Source1 => #0
            ExternalizedMapping(EventName) => #1
            #0, #1 -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=OdorQueued)
            -> MulticastSubject SoftwareEvents
            -> WorkflowOutput

        SubscribeSubject OdorQueued => #15
        SubscribeSubject TrialTrigger => #16
        #15, #16 -> SubscribeWhen
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateForceFSMPayload(ForceFSM=1))
        -> MulticastSubject DelphiControllerCommands
        -> Sink SoftwareEvent
            WorkflowInput Source1 => #0
            ExternalizedMapping(EventName) => #1
            #0, #1 -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=OdorReleased)
            -> MulticastSubject SoftwareEvents
            -> WorkflowOutput

        SubscribeSubject TrialDefinition
        -> MemberSelector(Selector=TrialTimeout)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT15S)
        -> Unit => #26
        SubscribeSubject WheelDisplacement
        -> MemberSelector(Selector=Value)
        -> Accumulate => #29
        SubscribeSubject TrialDefinition
        -> MemberSelector(Selector=DigThreshold) => #31
        #29, #31 -> WithLatestFrom
        -> Condition DisplacementThresholdReached
            WorkflowInput Source1
            -> GreaterThan
            -> WorkflowOutput
        -> First
        -> SelectMany ThresholdReached
            WorkflowInput Source1

            SubscribeSubject TrialDefinition
            -> MemberSelector(Selector=ThresholdReward)
            -> MulticastSubject DeliverPellet
            -> Sink SoftwareEvent => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(EventName) => #1
                #0, #1 -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=PelletDelivery)
                -> MulticastSubject SoftwareEvents
                -> WorkflowOutput
            SubscribeSubject TrialDefinition
            -> MemberSelector(Selector=ThresholdPunishment)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #8
            #4, #8 -> Delay(DueTime=PT0S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Unit => #36
        #26, #36 -> Merge => #37
        SubscribeSubject TrialTrigger => #38
        #37, #38 -> SubscribeWhen
        -> Take(Count=1)
        -> Sink SoftwareEvent
            WorkflowInput Source1 => #0
            ExternalizedMapping(EventName) => #1
            #0, #1 -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=EndTrialEvent)
            -> MulticastSubject SoftwareEvents
            -> WorkflowOutput
        -> WorkflowOutput
    -> Concat

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TriggerSource) => #6
    -> AindBehaviorDirectedForagingDataSchema.MatchTriggerSource(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.RadiusThreshold>)
    -> SelectMany RadiusThresholdTrigger
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject RadiusThreshold

        SubscribeSubject Contour
        -> MemberSelector(Selector=Centroid) => #4
        SubscribeSubject RadiusThreshold
        -> MemberSelector(Selector=TriggerCenter) => #6
        #4, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform EuclideanDistance => #8
          Expression: Math.Sqrt(Math.Pow(it.Item2.X - it.Item1.X, 2) + Math.Pow(it.Item2.Y - it.Item1.Y, 2))
        SubscribeSubject RadiusThreshold
        -> MemberSelector(Selector=Radius) => #10
        #8, #10 -> WithLatestFrom
        -> LessThan
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> Unit
        -> WorkflowOutput
    -> Sink SoftwareEvent => #9
        WorkflowInput Source1 => #0
        ExternalizedMapping(EventName) => #1
        #0, #1 -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RadiusTrigger)
        -> MulticastSubject SoftwareEvents
        -> WorkflowOutput
    #6 -> AindBehaviorDirectedForagingDataSchema.MatchTriggerSource(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.RandomisedTimer>)
    -> SelectMany RandomisedTimerTrigger
        WorkflowInput Source1
        -> Take(Count=1)
        -> MemberSelector(Selector=Distribution)
        -> AsyncSubject TimerDistribution

        SubscribeSubject TimerDistribution => #4
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #6
        #4, #6 -> AindBehaviorDirectedForagingDataSchema.SampleDistribution(RandomSource="")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> SelectMany WaitTimer
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TimeSpan

            Unit => #3
            SubscribeSubject TimeSpan
            -> PropertyMapping(DueTime) => #5
            #3, #5 -> Delay(DueTime=PT16.048S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> Repeat
        -> WorkflowOutput
    -> Sink SoftwareEvent => #12
        WorkflowInput Source1 => #0
        ExternalizedMapping(EventName) => #1
        #0, #1 -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RandomTrigger)
        -> MulticastSubject SoftwareEvents
        -> WorkflowOutput
    #6 -> AindBehaviorDirectedForagingDataSchema.MatchTriggerSource(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.FixedTimer>)
    -> SelectMany FixedTimerTrigger
        WorkflowInput Source1
        -> Take(Count=1)
        -> MemberSelector(Selector=Sequence)
        -> AsyncSubject Sequence

        IntProperty(Value=0)
        -> BehaviorSubject CurrentIndex

        SubscribeSubject TimeBase
        -> MemberSelector(Selector=Seconds)
        -> First
        -> Take(Count=1)
        -> AsyncSubject StartTime

        SubscribeSubject TimeBase
        -> MemberSelector(Selector=Seconds) => #12
        SubscribeSubject StartTime => #13
        #12, #13 -> CombineLatest
        -> Subtract
        -> PublishSubject ElapsedTime

        SubscribeSubject CurrentIndex
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject Sequence
            -> MemberSelector(Selector=Count) => #2
            #0, #2 -> WithLatestFrom
            -> LessThan
            -> WorkflowOutput
        -> SelectMany WaitForTime
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Index

            SubscribeSubject Sequence => #3
            SubscribeSubject Index
            -> PropertyMapping(Value) => #5
            #3, #5 -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=1)
            -> AsyncSubject Time

            SubscribeSubject ElapsedTime => #9
            SubscribeSubject Time => #10
            #9, #10 -> WithLatestFrom
            -> GreaterThanOrEqual
            -> Condition => #13
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject Index => #14
            #13, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject CurrentIndex
        -> Unit
        -> WorkflowOutput
    -> Sink SoftwareEvent => #15
        WorkflowInput Source1 => #0
        ExternalizedMapping(EventName) => #1
        #0, #1 -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TimerTrigger)
        -> MulticastSubject SoftwareEvents
        -> WorkflowOutput
    #9, #12, #15 -> Merge
    -> PublishSubject TrialTrigger
SubscribeSubject EndExperiment => #10
#9, #10 -> TakeUntil => #11
SubscribeSubject StartExperiment => #12
#11, #12 -> SubscribeWhen

Defer Logging => #14
    GroupWorkflow Harp
        SubscribeSubject DelphiControllerEvents => #0
        StringProperty
          Value:
            %YAML 1.1
            ---
            # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
            device: DelphiController
            whoAmI: 1407
            firmwareVersion: "0.0"
            hardwareTargets: "1.0"
            registers:
                ValveState:
                    address: 32
                    type: U16
                    maskType: ValveMask
                    access: Write
                    description: "Set the enabled/disabled state (enabled = 1) of all valves"
                ValvesSet:
                    address: 33
                    type: U16
                    maskType: ValveMask
                    access: Write
                    description: "Write a 1 to any bit to enable the corresponding valve."
                ValvesClear:
                    address: 34
                    type: U16
                    maskType: ValveMask
                    access: Write
                    description: "Write a 1 to any bit to disable the corresponding valve."
                ValveConfig0: &valveConfig
                    address: 35
                    type: U8
                    length: 12
                    access: Write
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve0."
                ValveConfig1:
                    <<: *valveConfig
                    address: 36
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve1."
                ValveConfig2:
                    <<: *valveConfig
                    address: 37
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve2."
                ValveConfig3:
                    <<: *valveConfig
                    address: 38
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve3."
                ValveConfig4:
                    <<: *valveConfig
                    address: 39
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve4."
                ValveConfig5:
                    <<: *valveConfig
                    address: 40
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve5."
                ValveConfig6:
                    <<: *valveConfig
                    address: 41
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve6."
                ValveConfig7:
                    <<: *valveConfig
                    address: 42
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve7."
                ValveConfig8:
                    <<: *valveConfig
                    address: 43
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve8."
                ValveConfig9:
                    <<: *valveConfig
                    address: 44
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve9."
                ValveConfig10:
                    <<: *valveConfig
                    address: 45
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve10."
                ValveConfig11:
                    <<: *valveConfig
                    address: 46
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve11."
                ValveConfig12:
                    <<: *valveConfig
                    address: 47
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve12."
                ValveConfig13:
                    <<: *valveConfig
                    address: 48
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve13."
                ValveConfig14:
                    <<: *valveConfig
                    address: 49
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve14."
                ValveConfig15:
                    <<: *valveConfig
                    address: 50
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve15."
                AuxGPIODir:
                    address: 51
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: "Specify each auxiliary GPIO pin as an input (0) or output (1)."
                AuxGPIOState:
                    address: 52
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: "Set the state (one or off) of any auxiliary GPIO pins specified as outputs."
                AuxGPIOSet:
                    address: 53
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: "When writing a 1 to any bit, turn on the specified auxiliary GPIO pins specified as outputs."
                AuxGPIOClear:
                    address: 54
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: "When writing a 1 to any bit, Turn off the specified auxiliary GPIO pins specified as outputs."
                AuxGPIOInputRiseEvent:
                    address: 55
                    type: U8
                    maskType: AuxGPIOMask
                    access: Event
                    description: ""
                AuxGPIOInputFallEvent:
                    address: 56
                    type: U8
                    maskType: AuxGPIOMask
                    access: Event
                    description: ""
                AuxGPIORisingInputs:
                    address: 57
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: ""
                AuxGPIOFallingInputs:
                    address: 58
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: ""
                PokePin:
                    address: 59
                    type: U8
                    access: Write
                    description: "which poke ports are active."
                PokePinInverted:
                    address: 60
                    type: U8
                    access: Write
                    description: "Which poke ports are inverted (i.e: transition from HIGH to LOW when a poke occurs)."
                PokeState:
                    address: 61
                    type: U8
                    access: Event
                    description: "The state of the poke port. An event will be triggered given a poke/ beam break that is greater than the min poke time."
                RawPokeState:
                    address: 62
                    type: U8
                    access: Event
                    description: "The raw state of the poke pin. Events will be triggered at the onset of a beam break (1) and offset (0)."
                PokeDometer:
                    address: 63
                    type: U32
                    access: Read
                    description: "number of mouse pokes per port since boot or reset."
                FSMState:
                    address: 64
                    type: U8
                    access: Write
                    description: "Enable (1) (aka reset) or Disable (0) the poke handling state machine. Note that CurrentOdorIndex must be specified first. Disabling and then enabling a previously-enabled FSM will reset it to its starting state."
                ForceFSM:
                    address: 65
                    type: U8
                    access: Write
                    description: "Force the poke handling state machine to iterate as if handling a mouse poke. PokeDometers are not incremented."
                QueuedOdorIndex:
                    address: 66
                    type: S8
                    access: Write
                    description: "Queued odor (value: odor valve index) that will be delievered to the odor port given a register poke. After an odor has been dispensed, the register will be set to -1, which indicates that a new odor is needed"
                VacuumCloseTimeUS:
                    address: 67
                    type: U32
                    access: Write
                    description: "Time alotted (in microseconds) for the vacuum valve to close."
                MinOdorDeliveryTimeUS:
                    address: 68
                    type: U32
                    access: Write
                    description: "Minimum time alotted (in microseconds) for the odor delivery state."
                MaxOdorDeliveryTimeUS:
                    address: 69
                    type: U32
                    access: Write
                    description: "Maximum time alotted (in microseconds) for the odor delivery state."
                OdorTransitionTimeUS:
                    address: 70
                    type: U32
                    access: Write
                    description: "Time alotted (in microseconds) before the vacuum turns on to remove the current odor."
                VacuumSetupTimeUS:
                    address: 71
                    type: U32
                    access: Write
                    description: "Time alotted (in microseconds) for the vacuum to open."
                FinalValveEnergizedTimeUS:
                    address: 72
                    type: U32
                    access: Write
                    description: "Time alotted (in microseconds) for the final valve to open and remain on."
                MinimumPokeTimeUS:
                    address: 73
                    type: U32
                    access: Write
                    description: "Minimum time (in microseconds) necessary for a mouse poke port beam to be broken before being interpretted as a poke."
                CamPin:
                    address: 74
                    type: U8
                    access: Write
                    description: "The GPIO output pin used for camera triggering. Default pin is 26."
                CamPinState:
                    address: 75
                    type: U8
                    access: Event
                    description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
                FrameRate:
                    address: 76
                    type: U32
                    access: Write
                    description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
                DutyCycle:
                    address: 77
                    type: Float
                    access: Write
                    description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
                EnableCamTrigger:
                    address: 78
                    type: U8
                    access: Write
                    description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
                EnableValveLeds:
                    address: 79
                    type: U8
                    access: Write
                    description: "Enable (1) and disable (0) valve LEDs."

            groupMasks:
                ValveMask:
                    description: "Valve that can be configured/enabled/disabled"
                    values:
                        Valve0: 0x0
                        Valve1: 0x1
                        Valve2: 0x2
                        Valve3: 0x3
                        Valve4: 0x4
                        Valve5: 0x5
                        Valve6: 0x6
                        Valve7: 0x7
                        Valve8: 0x8
                        Valve9: 0x9
                        Valve10: 0xA
                        Valve11: 0xB
                        Valve12: 0xC
                        Valve13: 0xD
                        Valve14: 0xE
                        Valve15: 0xF
                AuxGPIOMask:
                    description: "Auxiliary GPIO index."
                    values:
                        AuxGPIO0: 0x0
                        AuxGPIO1: 0x1
                        AuxGPIO2: 0x2
                        AuxGPIO3: 0x3
                        AuxGPIO4: 0x4
                        AuxGPIO5: 0x5
                        AuxGPIO6: 0x6
                        AuxGPIO7: 0x7
        -> PropertyMapping(DeviceMetadata) => #2
        #0, #2 -> IncludeWorkflow
          Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
          DeviceMetadata:
            %YAML 1.1
            ---
            # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
            device: DelphiController
            whoAmI: 1407
            firmwareVersion: "0.0"
            hardwareTargets: "1.0"
            registers:
                ValveState:
                    address: 32
                    type: U16
                    maskType: ValveMask
                    access: Write
                    description: "Set the enabled/disabled state (enabled = 1) of all valves"
                ValvesSet:
                    address: 33
                    type: U16
                    maskType: ValveMask
                    access: Write
                    description: "Write a 1 to any bit to enable the corresponding valve."
                ValvesClear:
                    address: 34
                    type: U16
                    maskType: ValveMask
                    access: Write
                    description: "Write a 1 to any bit to disable the corresponding valve."
                ValveConfig0: &valveConfig
                    address: 35
                    type: U8
                    length: 12
                    access: Write
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve0."
                ValveConfig1:
                    <<: *valveConfig
                    address: 36
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve1."
                ValveConfig2:
                    <<: *valveConfig
                    address: 37
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve2."
                ValveConfig3:
                    <<: *valveConfig
                    address: 38
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve3."
                ValveConfig4:
                    <<: *valveConfig
                    address: 39
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve4."
                ValveConfig5:
                    <<: *valveConfig
                    address: 40
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve5."
                ValveConfig6:
                    <<: *valveConfig
                    address: 41
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve6."
                ValveConfig7:
                    <<: *valveConfig
                    address: 42
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve7."
                ValveConfig8:
                    <<: *valveConfig
                    address: 43
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve8."
                ValveConfig9:
                    <<: *valveConfig
                    address: 44
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve9."
                ValveConfig10:
                    <<: *valveConfig
                    address: 45
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve10."
                ValveConfig11:
                    <<: *valveConfig
                    address: 46
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve11."
                ValveConfig12:
                    <<: *valveConfig
                    address: 47
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve12."
                ValveConfig13:
                    <<: *valveConfig
                    address: 48
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve13."
                ValveConfig14:
                    <<: *valveConfig
                    address: 49
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve14."
                ValveConfig15:
                    <<: *valveConfig
                    address: 50
                    description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve15."
                AuxGPIODir:
                    address: 51
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: "Specify each auxiliary GPIO pin as an input (0) or output (1)."
                AuxGPIOState:
                    address: 52
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: "Set the state (one or off) of any auxiliary GPIO pins specified as outputs."
                AuxGPIOSet:
                    address: 53
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: "When writing a 1 to any bit, turn on the specified auxiliary GPIO pins specified as outputs."
                AuxGPIOClear:
                    address: 54
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: "When writing a 1 to any bit, Turn off the specified auxiliary GPIO pins specified as outputs."
                AuxGPIOInputRiseEvent:
                    address: 55
                    type: U8
                    maskType: AuxGPIOMask
                    access: Event
                    description: ""
                AuxGPIOInputFallEvent:
                    address: 56
                    type: U8
                    maskType: AuxGPIOMask
                    access: Event
                    description: ""
                AuxGPIORisingInputs:
                    address: 57
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: ""
                AuxGPIOFallingInputs:
                    address: 58
                    type: U8
                    maskType: AuxGPIOMask
                    access: Write
                    description: ""
                PokePin:
                    address: 59
                    type: U8
                    access: Write
                    description: "which poke ports are active."
                PokePinInverted:
                    address: 60
                    type: U8
                    access: Write
                    description: "Which poke ports are inverted (i.e: transition from HIGH to LOW when a poke occurs)."
                PokeState:
                    address: 61
                    type: U8
                    access: Event
                    description: "The state of the poke port. An event will be triggered given a poke/ beam break that is greater than the min poke time."
                RawPokeState:
                    address: 62
                    type: U8
                    access: Event
                    description: "The raw state of the poke pin. Events will be triggered at the onset of a beam break (1) and offset (0)."
                PokeDometer:
                    address: 63
                    type: U32
                    access: Read
                    description: "number of mouse pokes per port since boot or reset."
                FSMState:
                    address: 64
                    type: U8
                    access: Write
                    description: "Enable (1) (aka reset) or Disable (0) the poke handling state machine. Note that CurrentOdorIndex must be specified first. Disabling and then enabling a previously-enabled FSM will reset it to its starting state."
                ForceFSM:
                    address: 65
                    type: U8
                    access: Write
                    description: "Force the poke handling state machine to iterate as if handling a mouse poke. PokeDometers are not incremented."
                QueuedOdorIndex:
                    address: 66
                    type: S8
                    access: Write
                    description: "Queued odor (value: odor valve index) that will be delievered to the odor port given a register poke. After an odor has been dispensed, the register will be set to -1, which indicates that a new odor is needed"
                VacuumCloseTimeUS:
                    address: 67
                    type: U32
                    access: Write
                    description: "Time alotted (in microseconds) for the vacuum valve to close."
                MinOdorDeliveryTimeUS:
                    address: 68
                    type: U32
                    access: Write
                    description: "Minimum time alotted (in microseconds) for the odor delivery state."
                MaxOdorDeliveryTimeUS:
                    address: 69
                    type: U32
                    access: Write
                    description: "Maximum time alotted (in microseconds) for the odor delivery state."
                OdorTransitionTimeUS:
                    address: 70
                    type: U32
                    access: Write
                    description: "Time alotted (in microseconds) before the vacuum turns on to remove the current odor."
                VacuumSetupTimeUS:
                    address: 71
                    type: U32
                    access: Write
                    description: "Time alotted (in microseconds) for the vacuum to open."
                FinalValveEnergizedTimeUS:
                    address: 72
                    type: U32
                    access: Write
                    description: "Time alotted (in microseconds) for the final valve to open and remain on."
                MinimumPokeTimeUS:
                    address: 73
                    type: U32
                    access: Write
                    description: "Minimum time (in microseconds) necessary for a mouse poke port beam to be broken before being interpretted as a poke."
                CamPin:
                    address: 74
                    type: U8
                    access: Write
                    description: "The GPIO output pin used for camera triggering. Default pin is 26."
                CamPinState:
                    address: 75
                    type: U8
                    access: Event
                    description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
                FrameRate:
                    address: 76
                    type: U32
                    access: Write
                    description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
                DutyCycle:
                    address: 77
                    type: Float
                    access: Write
                    description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
                EnableCamTrigger:
                    address: 78
                    type: U8
                    access: Write
                    description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
                EnableValveLeds:
                    address: 79
                    type: U8
                    access: Write
                    description: "Enable (1) and disable (0) valve LEDs."

            groupMasks:
                ValveMask:
                    description: "Valve that can be configured/enabled/disabled"
                    values:
                        Valve0: 0x0
                        Valve1: 0x1
                        Valve2: 0x2
                        Valve3: 0x3
                        Valve4: 0x4
                        Valve5: 0x5
                        Valve6: 0x6
                        Valve7: 0x7
                        Valve8: 0x8
                        Valve9: 0x9
                        Valve10: 0xA
                        Valve11: 0xB
                        Valve12: 0xC
                        Valve13: 0xD
                        Valve14: 0xE
                        Valve15: 0xF
                AuxGPIOMask:
                    description: "Auxiliary GPIO index."
                    values:
                        AuxGPIO0: 0x0
                        AuxGPIO1: 0x1
                        AuxGPIO2: 0x2
                        AuxGPIO3: 0x3
                        AuxGPIO4: 0x4
                        AuxGPIO5: 0x5
                        AuxGPIO6: 0x6
                        AuxGPIO7: 0x7
          Modality=Behavior
          DeviceName=DelphiController

        SubscribeSubject PatchEvents => #4
        StringProperty
          Value:
            %YAML 1.1
            ---
            # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
            device: OutputExpander
            whoAmI: 1108
            firmwareVersion: "2.3"
            hardwareTargets: "1.2"
            registers:
              AuxInState:
                address: 32
                type: U8
                access: Event
                maskType: AuxiliaryInputs
                description: Reports the state of the auxiliary inputs.
              AuxInRisingEdge:
                address: 33
                type: U8
                access: Write
                maskType: AuxiliaryInputs
                description: Enables rising edge detection on the auxiliary inputs.
              AuxInFallingEdge:
                address: 34
                type: U8
                access: Write
                maskType: AuxiliaryInputs
                description: Enables falling edge detection on the auxiliary input port.
              OutputSet: &output
                address: 35
                type: U16
                access: Write
                maskType: DigitalOutputs
                description: Set the specified digital output lines.
              OutputClear:
                <<: *output
                address: 36
                description: Clear the specified digital output lines
              OutputToggle:
                <<: *output
                address: 37
                description: Toggle the specified digital output lines
              OutputState:
                <<: *output
                address: 38
                description: Write the state of all digital output lines
              PwmAndStimEnable: &pwmstimcontrol
                address: 39
                type: U16
                access: Write
                maskType: PwmAndStimMappings
                description: Enables PWM and stimulation on the specified digital output lines.
              PwmAndStimDisable:
                <<: *pwmstimcontrol
                address: 40
                description: Disables PWM and stimulation on the specified digital output lines.
              PwmAndStimState:
                <<: *pwmstimcontrol
                address: 41
                description: Writes the mapping between PWM/stimulation and the specified digital output lines in a single command.
              Pwm0Frequency: &pwmfrequency
                address: 42
                type: Float
                maxValue: 1000
                minValue: 0.5
                access: Write
                description: Sets the frequency of PWM0 (Hz).
              Pwm0DutyCycle: &dutycycle
                address: 43
                type: Float
                minValue: 1
                maxValue: 100
                defaultValue: 50
                access: Write
                description: Sets the duty cycle of PWM0 (%).
              Pwm0PulseCount: &pulsecount
                address: 44
                type: U16
                access: Write
                description: Sets the number of pulses to generate for PWM0.
              Pwm0ActualFrequency: &realfrequency
                address: 45
                type: Float
                access: Read
                description: Reports the actual frequency to be generated from PWM0 (Hz).
              Pwm0ActualDutyCycle: &realdutycycle
                address: 46
                type: Float
                access: Read
                description: Reports the actual duty cycle to be generated from PWM0 (%).
              Pwm0AcquisitionMode: &pwmmode
                address: 47
                type: U8
                access: Write
                maskType: AcquisitionMode
                description: Sets the acquisition mode of PWM0.
              Pwm0TriggerSource: &pwmtriggermode
                address: 48
                type: U8
                access: Write
                maskType: TriggerSource
                description: Sets the trigger source of PWM0.
              Pwm0EventConfig: &eventenable
                address: 49
                type: U8
                access: Write
                maskType: EnableFlag
                description: Enables the generation of events for PWM0.
              Pwm1Frequency:
                <<: *pwmfrequency
                address: 50
                description: Sets the frequency of PWM1 (Hz).
              Pwm1DutyCycle:
                <<: *dutycycle
                address: 51
                description: Sets the duty cycle of PWM1 (%).
              Pwm1PulseCount:
                <<: *pulsecount
                address: 52
                description: Sets the number of pulses to generate for PWM1.
              Pwm1ActualFrequency:
                <<: *realfrequency
                address: 53
                description: Reports the actual frequency to be generated from PWM1 (Hz).
              Pwm1ActualDutyCycle:
                <<: *realdutycycle
                address: 54
                description: Reports the actual duty cycle to be generated from PWM1 (%).
              Pwm1AcquisitionMode:
                <<: *pwmmode
                address: 55
                description: Sets the acquisition mode of PWM1.
              Pwm1TriggerSource:
                <<: *pwmtriggermode
                address: 56
                description: Sets the trigger source of PWM1.
              Pwm1EventConfig:
                <<: *eventenable
                address: 57
                description: Enables the generation of events for PWM1.
              Pwm2Frequency:
                <<: *pwmfrequency
                address: 58
                description: Sets the frequency of PWM2 (Hz).
              Pwm2DutyCycle:
                <<: *dutycycle
                address: 59
                description: Sets the duty cycle of PWM2 (%).
              Pwm2PulseCount:
                <<: *pulsecount
                address: 60
                description: Sets the number of pulses to generate for PWM2.
              Pwm2ActualFrequency:
                <<: *realfrequency
                address: 61
                description: Reports the actual frequency to be generated from PWM2 (Hz).
              Pwm2ActualDutyCycle:
                <<: *realdutycycle
                address: 62
                description: Reports the actual duty cycle to be generated from PWM2 (%).
              Pwm2AcquisitionMode:
                <<: *pwmmode
                address: 63
                description: Sets the acquisition mode of PWM2.
              Pwm2TriggerSource:
                <<: *pwmtriggermode
                address: 64
                description: Sets the trigger source of PWM2.
              Pwm2EventConfig:
                <<: *eventenable
                address: 65
                description: Enables the generation of events for PWM2.
              PwmStart:
                address: 66
                type: U8
                access: [Write, Event]
                maskType: PwmChannels
                description: Starts the a PWM on the specified channels. An event will be generated if the start was triggered by an auxiliary input.
              PwmStop:
                address: 67
                type: U8
                access: Write
                maskType: PwmChannels
                description: Stops the a PWM on the specified channels.
              PwmRiseEvent:
                address: 68
                type: U8
                access: [Write, Event]
                maskType: PwmChannels
                description: Enables the generation of an event on every rising edge of the PWM line.
              Stim0PulseOnTime: &stimulusontime
                address: 69
                type: U16
                access: Write
                description: Sets the duration (us) each pulse is on for.
              Stim0PulseOffTime:
                <<: *stimulusontime
                address: 70
                description: Sets the duration (us) each pulse is off for.
              Stim0PulseCount:
                <<: *pulsecount
                address: 71
                description: Sets the number of pulses to be generate when triggered.
              Stim0AcquisitionMode:
                address: 72
                type: U8
                access: Write
                maskType: AcquisitionMode
                description: Sets the acquisition mode of Stim0.
              Stim0TriggerSource:
                address: 73
                type: U8
                access: Write
                maskType: TriggerSource
                description: Sets the trigger source of Stim0.
              StimStart:
                address: 74
                type: U8
                access: Write
                maskType: StimChannels
                description: Starts a target Stim protocol.
              StimStop:
                address: 75
                type: U8
                access: Write
                maskType: StimChannels
                description: Stops the target Stim protocol.
              OutputPulse:
                address: 76
                type: U16
                access: Write
                maskType: DigitalOutputs
                description: Enables pulse generation on the specified digital output line.
              Out0PulseWidth: &outpulsewidth
                address: 77
                type: U16
                access: Write
                description: Sets the duration (ms) of the pulse to be generated on the specified digital output line.
              Out1PulseWidth:
                <<: *outpulsewidth
                address: 78
              Out2PulseWidth:
                <<: *outpulsewidth
                address: 79
              Out3PulseWidth:
                <<: *outpulsewidth
                address: 80
              Out4PulseWidth:
                <<: *outpulsewidth
                address: 81
              Out5PulseWidth:
                <<: *outpulsewidth
                address: 82
              Out6PulseWidth:
                <<: *outpulsewidth
                address: 83
              Out7PulseWidth:
                <<: *outpulsewidth
                address: 84
              Out8PulseWidth:
                <<: *outpulsewidth
                address: 85
              Out9PulseWidth:
                <<: *outpulsewidth
                address: 86
              ExpansionBoard:
                address: 87
                type: U8
                access: Write
                maskType: ExpansionBoardType
                description: Selects the board to be interfaced with via the expansion port.
              Reserved0: &reserved
                address: 88
                type: U8
                access: Read
                visibility: private
                description: Reserved for future use.
              Reserved1:
                <<: *reserved
                address: 89
              MagneticEncoder:
                address: 90
                type: U16
                length: 2
                access: Event
                description: Generated event with the latest read from the magnetic encoder.
                payloadSpec:
                  Angle:
                    offset: 0
                    description: The angle position measurement of the magnetic encoder.
                  Magnitude:
                    offset: 1
                    description: The magnitude of the magnetic field.
              MagneticEncoderSampleRate:
                address: 91
                type: U8
                access: Write
                maskType: MagneticEncoderSampleRateMode
                description: Sets the sample rate of the magnetic encoder.
              Reserved2:
                <<: *reserved
                address: 92
              Reserved3:
                <<: *reserved
                address: 93
              ServoPeriod:
                address: 94
                type: U16
                access: Write
                description: Sets the period of the servo pulses (us).
              Servo0PulseWidth: &servopulsewidth
                address: 95
                type: U16
                access: Write
                description: Sets the pulse width of the Servo0 pulses (us).
              Servo1PulseWidth:
                <<: *servopulsewidth
                address: 96
                description: Sets the pulse width of the Servo1 pulses (us).
              Servo2PulseWidth:
                <<: *servopulsewidth
                address: 97
                description: Sets the pulse width of the Servo2 pulses (us).
              Reserved4:
                <<: *reserved
                address: 98
              Reserved5:
                <<: *reserved
                address: 99
              OpticalFlow:
                address: 100
                type: S16
                length: 3
                access: Event
                description: Generated event with the latest read from the optical flow sensor.
                payloadSpec:
                  DeltaX:
                    offset: 0
                    description: The movement in the X axis.
                  DeltaY:
                    offset: 1
                    description: The movement in the Y axis.
                  Squal:
                    offset: 2
                    description: The measure of the number of features visible by the sensor.
            bitMasks:
              AuxiliaryInputs:
                bits:
                  Aux0: 0x1
                  Aux1: 0x2
                  Aux0Changed: 0x10
                  Aux1Changed: 0x20
                description: Specifies the state of auxiliary input lines.
              DigitalOutputs:
                description: Specifies the available digital output lines.
                bits:
                  Out0: 0x1
                  Out1: 0x2
                  Out2: 0x4
                  Out3: 0x8
                  Out4: 0x10
                  Out5: 0x20
                  Out6: 0x40
                  Out7: 0x80
                  Out8: 0x100
                  Out9: 0x200
              PwmAndStimMappings:
                description: Specifies the mapping PWM and Stimulation to digital output lines.
                bits:
                  Pwm0ToOut1: 0x1
                  Pwm0ToOut2: 0x2
                  Pwm0ToOut3: 0x4
                  Pwm1ToOut6: 0x8
                  Pwm1ToOut7: 0x10
                  Pwm1ToOut8: 0x20
                  Pwm2ToOut9: 0x40
                  Stim0ToOut0: 0x80
                  Stim0ToOut5: 0x100
              PwmChannels:
                description: Specifies the available PWM protocols.
                bits:
                  Pwm0: 0x1
                  Pwm1: 0x2
                  Pwm2: 0x4
              StimChannels:
                description: Specifies the available Stim protocols.
                bits:
                  Stim0: 0x1
            groupMasks:
              AcquisitionMode:
                description: Available configurations for a PWM line.
                values:
                  Continuous: 0
                  Finite: 1
              TriggerSource:
                description: Available trigger sources.
                values:
                  Software: 0
                  Aux0Rising: 1
                  Aux0Falling: 2
                  Aux0WhileHigh: 3
                  Aux0WhileLow: 4
                  Aux1Rising: 16
                  Aux1Falling: 32
                  Aux1WhileHigh: 64
                  Aux1WhileLow: 128
              ExpansionBoardType:
                description: Specifies the available expansion boards implemented.
                values:
                  Breakout: 0
                  MagneticEncoder: 1
                  ServoMotor1: 2
                  ServoMotor2: 3
                  ServoMotor3: 4
                  OpticalFlow: 5
              MagneticEncoderSampleRateMode:
                description: Specifies the sample rate of the encoder.
                values:
                  SampleRate50Hz: 0
                  SampleRate100Hz: 1
                  SampleRate200Hz: 2
                  SampleRate250Hz: 3
                  SampleRate500Hz: 4
                  SampleRate1000Hz: 5
        -> PropertyMapping(DeviceMetadata) => #6
        #4, #6 -> IncludeWorkflow
          Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
          DeviceMetadata:
            %YAML 1.1
            ---
            # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
            device: OutputExpander
            whoAmI: 1108
            firmwareVersion: "2.3"
            hardwareTargets: "1.2"
            registers:
              AuxInState:
                address: 32
                type: U8
                access: Event
                maskType: AuxiliaryInputs
                description: Reports the state of the auxiliary inputs.
              AuxInRisingEdge:
                address: 33
                type: U8
                access: Write
                maskType: AuxiliaryInputs
                description: Enables rising edge detection on the auxiliary inputs.
              AuxInFallingEdge:
                address: 34
                type: U8
                access: Write
                maskType: AuxiliaryInputs
                description: Enables falling edge detection on the auxiliary input port.
              OutputSet: &output
                address: 35
                type: U16
                access: Write
                maskType: DigitalOutputs
                description: Set the specified digital output lines.
              OutputClear:
                <<: *output
                address: 36
                description: Clear the specified digital output lines
              OutputToggle:
                <<: *output
                address: 37
                description: Toggle the specified digital output lines
              OutputState:
                <<: *output
                address: 38
                description: Write the state of all digital output lines
              PwmAndStimEnable: &pwmstimcontrol
                address: 39
                type: U16
                access: Write
                maskType: PwmAndStimMappings
                description: Enables PWM and stimulation on the specified digital output lines.
              PwmAndStimDisable:
                <<: *pwmstimcontrol
                address: 40
                description: Disables PWM and stimulation on the specified digital output lines.
              PwmAndStimState:
                <<: *pwmstimcontrol
                address: 41
                description: Writes the mapping between PWM/stimulation and the specified digital output lines in a single command.
              Pwm0Frequency: &pwmfrequency
                address: 42
                type: Float
                maxValue: 1000
                minValue: 0.5
                access: Write
                description: Sets the frequency of PWM0 (Hz).
              Pwm0DutyCycle: &dutycycle
                address: 43
                type: Float
                minValue: 1
                maxValue: 100
                defaultValue: 50
                access: Write
                description: Sets the duty cycle of PWM0 (%).
              Pwm0PulseCount: &pulsecount
                address: 44
                type: U16
                access: Write
                description: Sets the number of pulses to generate for PWM0.
              Pwm0ActualFrequency: &realfrequency
                address: 45
                type: Float
                access: Read
                description: Reports the actual frequency to be generated from PWM0 (Hz).
              Pwm0ActualDutyCycle: &realdutycycle
                address: 46
                type: Float
                access: Read
                description: Reports the actual duty cycle to be generated from PWM0 (%).
              Pwm0AcquisitionMode: &pwmmode
                address: 47
                type: U8
                access: Write
                maskType: AcquisitionMode
                description: Sets the acquisition mode of PWM0.
              Pwm0TriggerSource: &pwmtriggermode
                address: 48
                type: U8
                access: Write
                maskType: TriggerSource
                description: Sets the trigger source of PWM0.
              Pwm0EventConfig: &eventenable
                address: 49
                type: U8
                access: Write
                maskType: EnableFlag
                description: Enables the generation of events for PWM0.
              Pwm1Frequency:
                <<: *pwmfrequency
                address: 50
                description: Sets the frequency of PWM1 (Hz).
              Pwm1DutyCycle:
                <<: *dutycycle
                address: 51
                description: Sets the duty cycle of PWM1 (%).
              Pwm1PulseCount:
                <<: *pulsecount
                address: 52
                description: Sets the number of pulses to generate for PWM1.
              Pwm1ActualFrequency:
                <<: *realfrequency
                address: 53
                description: Reports the actual frequency to be generated from PWM1 (Hz).
              Pwm1ActualDutyCycle:
                <<: *realdutycycle
                address: 54
                description: Reports the actual duty cycle to be generated from PWM1 (%).
              Pwm1AcquisitionMode:
                <<: *pwmmode
                address: 55
                description: Sets the acquisition mode of PWM1.
              Pwm1TriggerSource:
                <<: *pwmtriggermode
                address: 56
                description: Sets the trigger source of PWM1.
              Pwm1EventConfig:
                <<: *eventenable
                address: 57
                description: Enables the generation of events for PWM1.
              Pwm2Frequency:
                <<: *pwmfrequency
                address: 58
                description: Sets the frequency of PWM2 (Hz).
              Pwm2DutyCycle:
                <<: *dutycycle
                address: 59
                description: Sets the duty cycle of PWM2 (%).
              Pwm2PulseCount:
                <<: *pulsecount
                address: 60
                description: Sets the number of pulses to generate for PWM2.
              Pwm2ActualFrequency:
                <<: *realfrequency
                address: 61
                description: Reports the actual frequency to be generated from PWM2 (Hz).
              Pwm2ActualDutyCycle:
                <<: *realdutycycle
                address: 62
                description: Reports the actual duty cycle to be generated from PWM2 (%).
              Pwm2AcquisitionMode:
                <<: *pwmmode
                address: 63
                description: Sets the acquisition mode of PWM2.
              Pwm2TriggerSource:
                <<: *pwmtriggermode
                address: 64
                description: Sets the trigger source of PWM2.
              Pwm2EventConfig:
                <<: *eventenable
                address: 65
                description: Enables the generation of events for PWM2.
              PwmStart:
                address: 66
                type: U8
                access: [Write, Event]
                maskType: PwmChannels
                description: Starts the a PWM on the specified channels. An event will be generated if the start was triggered by an auxiliary input.
              PwmStop:
                address: 67
                type: U8
                access: Write
                maskType: PwmChannels
                description: Stops the a PWM on the specified channels.
              PwmRiseEvent:
                address: 68
                type: U8
                access: [Write, Event]
                maskType: PwmChannels
                description: Enables the generation of an event on every rising edge of the PWM line.
              Stim0PulseOnTime: &stimulusontime
                address: 69
                type: U16
                access: Write
                description: Sets the duration (us) each pulse is on for.
              Stim0PulseOffTime:
                <<: *stimulusontime
                address: 70
                description: Sets the duration (us) each pulse is off for.
              Stim0PulseCount:
                <<: *pulsecount
                address: 71
                description: Sets the number of pulses to be generate when triggered.
              Stim0AcquisitionMode:
                address: 72
                type: U8
                access: Write
                maskType: AcquisitionMode
                description: Sets the acquisition mode of Stim0.
              Stim0TriggerSource:
                address: 73
                type: U8
                access: Write
                maskType: TriggerSource
                description: Sets the trigger source of Stim0.
              StimStart:
                address: 74
                type: U8
                access: Write
                maskType: StimChannels
                description: Starts a target Stim protocol.
              StimStop:
                address: 75
                type: U8
                access: Write
                maskType: StimChannels
                description: Stops the target Stim protocol.
              OutputPulse:
                address: 76
                type: U16
                access: Write
                maskType: DigitalOutputs
                description: Enables pulse generation on the specified digital output line.
              Out0PulseWidth: &outpulsewidth
                address: 77
                type: U16
                access: Write
                description: Sets the duration (ms) of the pulse to be generated on the specified digital output line.
              Out1PulseWidth:
                <<: *outpulsewidth
                address: 78
              Out2PulseWidth:
                <<: *outpulsewidth
                address: 79
              Out3PulseWidth:
                <<: *outpulsewidth
                address: 80
              Out4PulseWidth:
                <<: *outpulsewidth
                address: 81
              Out5PulseWidth:
                <<: *outpulsewidth
                address: 82
              Out6PulseWidth:
                <<: *outpulsewidth
                address: 83
              Out7PulseWidth:
                <<: *outpulsewidth
                address: 84
              Out8PulseWidth:
                <<: *outpulsewidth
                address: 85
              Out9PulseWidth:
                <<: *outpulsewidth
                address: 86
              ExpansionBoard:
                address: 87
                type: U8
                access: Write
                maskType: ExpansionBoardType
                description: Selects the board to be interfaced with via the expansion port.
              Reserved0: &reserved
                address: 88
                type: U8
                access: Read
                visibility: private
                description: Reserved for future use.
              Reserved1:
                <<: *reserved
                address: 89
              MagneticEncoder:
                address: 90
                type: U16
                length: 2
                access: Event
                description: Generated event with the latest read from the magnetic encoder.
                payloadSpec:
                  Angle:
                    offset: 0
                    description: The angle position measurement of the magnetic encoder.
                  Magnitude:
                    offset: 1
                    description: The magnitude of the magnetic field.
              MagneticEncoderSampleRate:
                address: 91
                type: U8
                access: Write
                maskType: MagneticEncoderSampleRateMode
                description: Sets the sample rate of the magnetic encoder.
              Reserved2:
                <<: *reserved
                address: 92
              Reserved3:
                <<: *reserved
                address: 93
              ServoPeriod:
                address: 94
                type: U16
                access: Write
                description: Sets the period of the servo pulses (us).
              Servo0PulseWidth: &servopulsewidth
                address: 95
                type: U16
                access: Write
                description: Sets the pulse width of the Servo0 pulses (us).
              Servo1PulseWidth:
                <<: *servopulsewidth
                address: 96
                description: Sets the pulse width of the Servo1 pulses (us).
              Servo2PulseWidth:
                <<: *servopulsewidth
                address: 97
                description: Sets the pulse width of the Servo2 pulses (us).
              Reserved4:
                <<: *reserved
                address: 98
              Reserved5:
                <<: *reserved
                address: 99
              OpticalFlow:
                address: 100
                type: S16
                length: 3
                access: Event
                description: Generated event with the latest read from the optical flow sensor.
                payloadSpec:
                  DeltaX:
                    offset: 0
                    description: The movement in the X axis.
                  DeltaY:
                    offset: 1
                    description: The movement in the Y axis.
                  Squal:
                    offset: 2
                    description: The measure of the number of features visible by the sensor.
            bitMasks:
              AuxiliaryInputs:
                bits:
                  Aux0: 0x1
                  Aux1: 0x2
                  Aux0Changed: 0x10
                  Aux1Changed: 0x20
                description: Specifies the state of auxiliary input lines.
              DigitalOutputs:
                description: Specifies the available digital output lines.
                bits:
                  Out0: 0x1
                  Out1: 0x2
                  Out2: 0x4
                  Out3: 0x8
                  Out4: 0x10
                  Out5: 0x20
                  Out6: 0x40
                  Out7: 0x80
                  Out8: 0x100
                  Out9: 0x200
              PwmAndStimMappings:
                description: Specifies the mapping PWM and Stimulation to digital output lines.
                bits:
                  Pwm0ToOut1: 0x1
                  Pwm0ToOut2: 0x2
                  Pwm0ToOut3: 0x4
                  Pwm1ToOut6: 0x8
                  Pwm1ToOut7: 0x10
                  Pwm1ToOut8: 0x20
                  Pwm2ToOut9: 0x40
                  Stim0ToOut0: 0x80
                  Stim0ToOut5: 0x100
              PwmChannels:
                description: Specifies the available PWM protocols.
                bits:
                  Pwm0: 0x1
                  Pwm1: 0x2
                  Pwm2: 0x4
              StimChannels:
                description: Specifies the available Stim protocols.
                bits:
                  Stim0: 0x1
            groupMasks:
              AcquisitionMode:
                description: Available configurations for a PWM line.
                values:
                  Continuous: 0
                  Finite: 1
              TriggerSource:
                description: Available trigger sources.
                values:
                  Software: 0
                  Aux0Rising: 1
                  Aux0Falling: 2
                  Aux0WhileHigh: 3
                  Aux0WhileLow: 4
                  Aux1Rising: 16
                  Aux1Falling: 32
                  Aux1WhileHigh: 64
                  Aux1WhileLow: 128
              ExpansionBoardType:
                description: Specifies the available expansion boards implemented.
                values:
                  Breakout: 0
                  MagneticEncoder: 1
                  ServoMotor1: 2
                  ServoMotor2: 3
                  ServoMotor3: 4
                  OpticalFlow: 5
              MagneticEncoderSampleRateMode:
                description: Specifies the sample rate of the encoder.
                values:
                  SampleRate50Hz: 0
                  SampleRate100Hz: 1
                  SampleRate200Hz: 2
                  SampleRate250Hz: 3
                  SampleRate500Hz: 4
                  SampleRate1000Hz: 5
          Modality=Behavior
          DeviceName=UndergroundFeeder

    GroupWorkflow Video
        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> Merge => #2
        -> MemberSelector(Selector=Value.VideoWriter)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
        -> AindBehaviorDirectedForagingDataSchema.MatchVideoWriter(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.VideoWriterFfmpeg>) => #5
        #2 -> MemberSelector(Selector=Key) => #6
        #5, #6 -> WithLatestFrom
        -> CreateObservable FfmpegWriter
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject This

            SubscribeSubject This
            -> MemberSelector(Selector=Item2)
            -> AsyncSubject ThisCameraName

            SubscribeSubject This
            -> MemberSelector(Selector=Item1)
            -> AsyncSubject ThisWriter

            SubscribeSubject TriggeredCamerasStream
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject ThisCameraName => #2
                #1, #2 -> CombineLatest
                -> Equal
                -> WorkflowOutput
            -> Take(Count=1)
            -> Merge => #12
            SubscribeSubject ThisCameraName
            -> PropertyMapping(LogName) => #14
            SubscribeSubject ThisWriter
            -> MemberSelector(Selector=ContainerExtension)
            -> PropertyMapping(VideoExtension) => #17
            SubscribeSubject ThisWriter
            -> PropertyMapping(OutputArguments(Selector=OutputArguments), InputArguments(Selector=InputArguments), FrameRate(Selector=FrameRate)) => #19
            #12, #14, #17, #19 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai
              Modality=BehaviorVideos
              LogName=MainCamera
              VideoExtension=mp4
              OutputArguments: -vf "format=yuv420p10le,scale=out_range=full,setparams=range=full:colorspace=bt709:color_primaries=bt709:color_trc=linear" -c:v hevc_nvenc -pix_fmt p010le -color_range 2 -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M -f matroska -write_crc32 0
              InputArguments="-colorspace bt709 -color_primaries bt709 -color_range 2 -color_trc linear"
              Verbosity=Warning
              FrameRate=60
        -> Merge

        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> Merge => #12
        -> MemberSelector(Selector=Value.VideoWriter)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
        -> AindBehaviorDirectedForagingDataSchema.MatchVideoWriter(Type=TypeMapping<AindBehaviorDirectedForagingDataSchema.VideoWriterOpenCv>) => #15
        #12 -> MemberSelector(Selector=Key) => #16
        #15, #16 -> WithLatestFrom
        -> CreateObservable OpenCvWriter
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject This

            SubscribeSubject This
            -> MemberSelector(Selector=Item2)
            -> AsyncSubject ThisCameraName

            SubscribeSubject This
            -> MemberSelector(Selector=Item1)
            -> AsyncSubject ThisWriter

            SubscribeSubject TriggeredCamerasStream
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject ThisCameraName => #2
                #1, #2 -> CombineLatest
                -> Equal
                -> WorkflowOutput
            -> Take(Count=1)
            -> Merge => #12
            SubscribeSubject ThisCameraName
            -> PropertyMapping(LogName) => #14
            SubscribeSubject ThisWriter
            -> MemberSelector(Selector=ContainerExtension)
            -> PropertyMapping(VideoExtension) => #17
            SubscribeSubject ThisWriter
            -> PropertyMapping(FrameRate(Selector=FrameRate), FourCC(Selector=FourCC)) => #19
            #12, #14, #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSpinnakerOpenCv.bonsai, Modality=BehaviorVideos, LogName=FaceCamera, VideoExtension=mp4, FrameRate=30, FourCC=FMP4)
        -> Merge

    GroupWorkflow Config
        SubscribeSubject SessionSchema
        -> AindBehaviorDirectedForagingDataSchema.SerializeToJson(Formatting=None)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=session_output)

        SubscribeSubject TaskLogicSchema
        -> AindBehaviorDirectedForagingDataSchema.SerializeToJson(Formatting=None)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=tasklogic_output)

        SubscribeSubject RigSchema
        -> AindBehaviorDirectedForagingDataSchema.SerializeToJson(Formatting=None)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=rig_output)

        SubscribeSubject RawRigSchema
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=rig_input, Extension=json)

        SubscribeSubject RawSessionSchema
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogAllText.bonsai
          SubjectName=LoggingRootPath
          Modality=Behavior
          DeviceName=Config
          LogName=session_input
          Extension=json

        SubscribeSubject RawTaskLogicSchema
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogAllText.bonsai
          SubjectName=LoggingRootPath
          Modality=Behavior
          DeviceName=Config
          LogName=tasklogic_input
          Extension=json

    GroupWorkflow SoftwareEvents
        SubscribeSubject SoftwareEvents => #0
        SubscribeSubject TimeBase
        -> MemberSelector(Selector=Seconds) => #2
        #0, #2 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=Behavior)
        -> WorkflowOutput
SubscribeSubject EndExperiment => #15
#14, #15 -> TakeUntil => #16
SubscribeSubject StartLogging => #17
#16, #17 -> SubscribeWhen
